PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = withIM
  keyboardBackend = ioHub
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Routines
  Routine teks2
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    ImageComponent t2
      image = C:/Users/asus/OneDrive/Pictures/Ekslan/2.jpg
      size = (1.8, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1000.0
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    KeyboardComponent respon2
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine teks1
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    ImageComponent t1
      image = C:/Users/asus/OneDrive/Pictures/Ekslan/1.jpg
      size = (1.8, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1000.0
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    KeyboardComponent response
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine instruksi
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    TextComponent instruction
      font = Times New Roman
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
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      text:
        Instruksi

        1. Anda akan disajikan lima bagian teks. Anda bisa menekan tombol panah kanan pada keyboard untuk melanjutkan ke bagian selanjutnya. Namun, Anda tidak diperbolehkan untuk kembali ke bagian sebelumnya.

        2. Dalam waktu tertentu, waktu baca Anda akan diinterupsi oleh pesan yang harus Anda jawab sebagaimana Anda akan menjawabnya di kehidupan Anda sehari-hari. Setelah selesai menjawab, Anda dapat menekan "enter" untuk melanjutkan eksperimen.

        3. Durasi baca yang akan diberikan yaitu selama 10 menit. Anda diharapkan untuk mengakhiri eksperimen secepat mungkin.  Anda dapat mengakhiri dengan menekan tombol "spasi".
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        global_timer = core.Clock()
        global_timer.reset()
  Routine teks3
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    ImageComponent t3
      image = C:/Users/asus/OneDrive/Pictures/Ekslan/3.jpg
      size = (1.8, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1000.0
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    KeyboardComponent respon3
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine message1
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    TextComponent im1_2
      letterHeight = 0.05
      startVal [time (s)] = 20.0
      stopVal [condition] = 10.0
      text = This is your message!
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 20.0
      stopVal [duration (s)] = 10.0
      text = This is your text message!
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  Routine teks_1
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    ImageComponent t_1
      image = C:/Users/asus/OneDrive/Pictures/Ekslan/1.jpg
      size = (1.8, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 17.0
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  Routine teks_2
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    ImageComponent t_2
      image = C:/Users/asus/OneDrive/Pictures/Ekslan/2.jpg
      size = (1.8, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15.0
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  Routine IM_1
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    TextboxComponent im1
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 100.0
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      text:
        Hai, salam kenal! Aku Haura, kalau kamu biasanya dipanggil apa?

        Jawab:
    CodeComponent end_im1
      Code Type = Auto->JS
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      Begin Routine:
        participant_input = ''
      Each Frame:
        keys = event.getKeys()

        if 'return' in keys:
            continueRoutine = False
  Routine IM_2
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    TextboxComponent im2
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 100.0
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      text:
        Aku mau tau dong, selama kuliah ini kamu ngekos atau pulang pergi, nih? Kalau ngekos, kamu ngekos di mana dan kalau enggak, kamu tinggal di mana?

        Jawab:
    CodeComponent end_im2
      Code Type = Auto->JS
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      Begin Routine:
        participant_input = ''
      Each Frame:
        keys = event.getKeys()

        if 'return' in keys:
            continueRoutine = False
  Routine teks_3
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    ImageComponent t_3
      image = C:/Users/asus/OneDrive/Pictures/Ekslan/3.jpg
      size = (1.8, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 29.0
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  Routine IM_3
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    TextboxComponent im3
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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      text:
        Oh gitu, kalau aku pulang pergi dari Cimahi. Btw, karena udah UTS dan lumayan kenal sama matkul di semester 1, matkul favorit kamu apa kira-kira? Kenapa kamu suka matkul itu?

        Jawab:
    CodeComponent end_im3
      Code Type = Auto->JS
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      Begin Routine:
        participant_input = ''
      Each Frame:
        keys = event.getKeys()

        if 'return' in keys:
            continueRoutine = False
  Routine teks_4
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  Routine IM_4
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    TextboxComponent im4
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 100.0
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      text:
        Wah, kalau aku sukanya matkul biopsikologi soalnya aku dari dulu emang suka biologi hehehe. Oh iya, gimana semester 1 kamu sejauh ini? Apakah ada kendala atau hal-hal yang berkesan?

        Jawab:
    CodeComponent end_im4
      Code Type = Auto->JS
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      Each Frame:
        keys = event.getKeys()

        if 'return' in keys:
            continueRoutine = False
  Routine teks4
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    ImageComponent t4
      image = C:/Users/asus/OneDrive/Pictures/Ekslan/4.jpg
      size = (1.8, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1000.0
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    KeyboardComponent respon4
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine teks_5
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  Routine IM_5
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    TextboxComponent im5
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 100.0
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      text:
        Terus, kalau aku boleh kepo, apa harapan kamu kedepannya selama kuliah di Fapsi?

        Jawab:
    CodeComponent end_im5
      Code Type = Auto->JS
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      Each Frame:
        keys = event.getKeys()

        if 'return' in keys:
            continueRoutine = False
  Routine teks5
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    ImageComponent t5
      size = (1.8, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1000.0
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    KeyboardComponent end_experiment
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent save_timer
      Code Type = Auto->JS
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      End Experiment:
        elapsed_time = global_timer.getTime()
        thisExp.addData('ParticipantTime', elapsed_time)
        thisExp.saveAsWideText('participant_data.csv')
Flow
  Routine instruksi
  Routine teks_1
  Routine IM_1
  Routine teks1
  Routine teks_2
  Routine IM_2
  Routine teks2
  Routine teks_3
  Routine IM_3
  Routine teks3
  Routine teks_4
  Routine IM_4
  Routine teks4
  Routine teks_5
  Routine IM_5
  Routine teks5
